[
    {
        "object.className": "ProtImportMovies",
        "object.id": "2",
        "object.label": "scipion - import movies",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "importFrom": 0,
        "filesPath": "/work/gsharov/tmp/project/Movies/",
        "filesPattern": "*.mrc",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 1.0,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": 1.0,
        "gainFile": "gain.mrc",
        "darkFile": null,
        "dataStreaming": true,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "64",
        "object.label": "motioncorr - movie alignment",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "gpuList": "0",
        "doSaveAveMic": true,
        "useAlignToSum": true,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveMovie": false,
        "doComputePSD": false,
        "doComputeMicThumbnail": false,
        "extraProtocolParams": "",
        "doApplyDoseFilter": true,
        "patchX": 5,
        "patchY": 5,
        "patchOverlap": 0,
        "group": 1,
        "tol": 0.5,
        "doSaveUnweightedMic": false,
        "extraParams2": "",
        "gainRot": 0,
        "gainFlip": 0,
        "defectFile": null,
        "defectMap": null,
        "doMagCor": false,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "ProtGctf",
        "object.id": "124",
        "object.label": "gctf - ctf estimation",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "windowSize": 1024,
        "lowRes": 50.0,
        "highRes": 4.0,
        "minDefocus": 5000.0,
        "maxDefocus": 90000.0,
        "stepDefocus": 500.0,
        "astigmatism": 1000.0,
        "plotResRing": true,
        "gpuList": "1",
        "doEPA": false,
        "EPAsmp": 4,
        "doBasicRotave": false,
        "overlap": 0.5,
        "convsize": 85,
        "smoothResL": 1000,
        "bfactor": 150,
        "doHighRes": false,
        "HighResL": 15.0,
        "HighResH": 4.0,
        "HighResBf": 50,
        "doValidate": false,
        "doPhShEst": false,
        "phaseShiftL": 0.0,
        "phaseShiftH": 180.0,
        "phaseShiftS": 10.0,
        "phaseShiftT": 0,
        "coSearchRefine": false,
        "refine2DT": 1,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 5,
        "inputMicrographs": "64.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "SphireProtCRYOLOPicking",
        "object.id": "191",
        "object.label": "sphire - cryolo picking",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "inputModelFrom": 1,
        "conservPickVar": 0.3,
        "lowPassFilter": false,
        "absCutOffFreq": 0.1,
        "numCpus": 5,
        "input_size": 1024,
        "boxSize": 0,
        "max_box_per_image": 600,
        "useGpu": true,
        "gpuList": "0",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 5,
        "inputMicrographs": "64.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "ProtRelionExtractParticles",
        "object.id": "236",
        "object.label": "relion - particles extraction",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "downsampleType": 1,
        "boxSize": 256,
        "doRescale": true,
        "rescaledSize": 64,
        "doInvert": true,
        "doNormalize": true,
        "backDiameter": 200,
        "stddevWhiteDust": -1.0,
        "stddevBlackDust": -1.0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 5,
        "hostName": "localhost",
        "numberOfMpi": 5,
        "inputMicrographs": "64.outputMicrographsDoseWeighted",
        "ctfRelations": "124.outputCTF",
        "inputCoordinates": "191.outputCoordinates"
    },
    {
        "object.className": "ProtMonitorSummary",
        "object.id": "282",
        "object.label": "emfacilities - monitor summary",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "inputProtocols": [
            "2",
            "64",
            "124",
            "191",
            "236"
        ],
        "samplingInterval": 60,
        "stddevValue": 0.04,
        "ratio1Value": 1.15,
        "ratio2Value": 4.5,
        "maxDefocus": 40000.0,
        "minDefocus": 1000.0,
        "astigmatism": 1000.0,
        "monitorTime": 30000.0,
        "cpuAlert": 101.0,
        "memAlert": 101.0,
        "swapAlert": 101.0,
        "doGpu": false,
        "gpusToUse": "0",
        "doNetwork": false,
        "netInterfaces": 1,
        "doDiskIO": false,
        "doMail": false,
        "emailFrom": "from@from.fakeadress.com",
        "emailTo": "to@to.fakeadress.com",
        "smtp": "smtp.fakeadress.com",
        "doInflux": false,
        "publishCmd": ""
    }
]